Export_Data_To_Ascii_File
/SIGNAL_TYPES=LINK_MODEL_BASED
! /SIGNAL_FOLDER=ORIGINAL
/SIGNAL_NAMES=Right Ankle Angle+Right Knee Angle+Right Hip Angle+Left Ankle Angle+Left Knee+Left Hip Angle+Right Ankle Moment+Right Knee Moment+Right Hip Moment+Left Ankle Moment+Left Knee Moment+Left Hip Moment
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/COMPONENT_SEQUENCE=ALL
/SIGNAL_PRECISION=5
/EVENT_SEQUENCE=RHS+RHS, RHS+RHS, RHS+RHS, LHS+LHS, LHS+LHS, LHS+LHS, RHS+RHS, RHS+RHS, RHS+RHS, LHS+LHS, LHS+LHS, LHS+LHS
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! /USE_POINT_RATE=FALSE
/NORMALIZE_DATA=TRUE
! /NORMALIZE_POINTS=101
! /EXPORT_MEAN_AND_STD_DEV=FALSE
! /EXPORT_MEAN_AND_STD_DEV_FOR_METRIC=FALSE
! /USE_P2D_FORMAT=FALSE
! /USE_XML_FORMAT=FALSE
! /USE_SHORT_FILENAME=FALSE
! /EXPORT_EMPTY_SIGNALS=FALSE
! /EXPORT_WITHOUT_HEADER=FALSE
! /EXPORT_NAN=FALSE
! /USE_SCIENTIFIC_NOTATION=FALSE
;

